PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'session': '001', 'participant': 'neo'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Use version = latest
  Window size (pixels) = [1366, 768]
  expName = demo
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        import numpy as np
        from scipy.spatial import distance
        from scipy.sparse import csgraph
        import matplotlib.pyplot as plt

        sys.path.insert(0, os.path.join('..', '..')) # to load module from neighbouring folder
        import motbox

        track_filename = os.path.join('tracks', 'T220.csv')
      Begin Routine:
        T = motbox.Track()
        T.load_from_csv(track_filename)
        T.scale(50) # px per inch

        P = motbox.Puppeteer()
        P.track = T
        P.clone_template_psychopy(p1_template, 4)
      Each Frame:
        stop_time = 4


        if t >= 0 and t <= stop_time:
            P.update_positions_psychopy(t)
            P.draw_all()

        if t > stop_time and t <= (stop_time + 1):
            P.update_positions_psychopy(4)
            P.draw_all()

        if t > (stop_time + 1):
            P.hide_all()
    ImageComponent p2_template
      image = img/happy-50-green.png
      pos = (10000, 10000)
      size = (64, 64)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5
      store = nothing
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    PolygonComponent p1_template
      fillColor = $[1,1,1]
      pos = (0, 90)
      shape = rectangle
      size = (50, 50)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = pix
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Flow
  Routine trial
